PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {u'participant': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Data filename = u'data_day2/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  expName = b2b
  Screen = 1
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Routines
  Routine play_anat_mov
    MovieComponent lifted
      movie = /Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/lifted.mp4
      stopVal [duration (s)] = 302
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      backend = avbin
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    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 351
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine check_vol
    TextComponent vol_good_txt
      text = Volume good?
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent vol_isGood
      forceEndRoutine = True
      allowedKeys = 'y','n'
      startVal [time (s)] = 0.0
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    CodeComponent code
      End Routine:
        if vol_isGood.keys=="y":
                loop_soundcheck.finished=1
    TextComponent vol_resp_txt
      text = [y/n]
      pos = (0.5, -0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine prep_soundcheck_2
    TextComponent prep_soundcheck_txt
      text = soundcheck
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent prep_soundcheck_space
      text = [space]
      pos = (.5, -.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine play_fmri_lesson
    MovieComponent movie_lesson
      movie = C:\Users\Hasson Lab\Documents\Mai\teaching\stimuli\fmri_lesson.mp4
      stopVal [duration (s)] = 1939
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      backend = avbin
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    KeyboardComponent movie_skip_space
      stopVal [duration (s)] = 1939
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine prep_pretest
    TextComponent pretest_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Quiz

        Answer the following Qs
        by responding on the
        button box.
    TextComponent pretest_space
      text = [space to continue]
      pos = (.5, -.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    KeyboardComponent key_resp_11
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent setup_scoring
      Begin Experiment:
        pretest_score = 0;
        posttest_score = 0;
        is_pretest = 1;
  Routine prep_lessonVid
    TextComponent review_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Lesson

        Please watch the following
        video carefully.
    TextComponent review_space
      pos = (.5, -.6)
      startVal [time (s)] = 0.0
      letterHeight = .05
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      text:
        [space to cont]
    KeyboardComponent review_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine wait_trigger_nodisp
    TextComponent text_2
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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    KeyboardComponent wait_trig_equal
      forceEndRoutine = True
      allowedKeys = 'equal'
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Each Frame:
        if not in_scanner:
            break
  Routine rtn_button_prep
    TextComponent button_prep_txt
      text = Preparing button test...
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine fixation
    TextComponent text_6
      text = +
      stopVal [duration (s)] = .25
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine post_vid_qs
    ImageComponent post_vid_q
      startVal [time (s)] = 0.0
      image [set every repeat] = $q_path
      size = (1.3, 1.3)
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    KeyboardComponent post_vid_resp
      forceEndRoutine = True
      allowedKeys = '1', '2', '3', '4'
      startVal [time (s)] = 0.0
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  Routine prep_video
    TextComponent prepvid_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Lesson

        Please carefully watch
        the following video.
    TextComponent prepvid_space
      text = [space to continue]
      pos = (.5, -.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    KeyboardComponent prepvid_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine play_fmri_review
    MovieComponent review
      movie = /Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/fmri_review.mp4
      stopVal [duration (s)] = 423
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      backend = avbin
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    KeyboardComponent review_skip
      stopVal [duration (s)] = 423
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine play_neuralnet
    MovieComponent neuralnet_mov
      movie = /Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/neural_nets.mp4
      stopVal [duration (s)] = 878
      forceEndRoutine = False
      No audio = True
      startVal [time (s)] = 0.0
      backend = avbin
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    KeyboardComponent skip_nn_mov
      stopVal [duration (s)] = 878
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine sound_test
    TextComponent sound_test_text
      text = Sound test in progress
      stopVal [duration (s)] = 23*const_ff_factor
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_sound_test_dur
      Each Frame:
        # abort quickly if fast forward engaged
        if (const_stim_dur > 0 and t >= const_stim_dur):
            continueRoutine = False
    KeyboardComponent key_resp_5
      stopVal [duration (s)] = 25
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    MovieComponent movie
      movie [set every repeat] = /Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/soundcheck.mp4
      stopVal [duration (s)] = 25
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      backend = avbin
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  Routine prep_anat_scan
    TextComponent anatomy_txt
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Running anatomical scan
         (you can watch video or
         close your eyes/rest)
    TextComponent release_space_anat
      text = [Space]
      pos = (0.5, -0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    KeyboardComponent release_space
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine prep_soundcheck
    TextComponent text_4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        sound check
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent text_9
      text = [space to cont]
      pos = (0.5, -0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine rtn_wait_for_trigger
    TextComponent text
      text = Please wait...
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_wait_trigger
      forceEndRoutine = True
      allowedKeys = 'equal'
      startVal [time (s)] = 0.0
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    CodeComponent code_skip_trigger
      Each Frame:
        if not in_scanner:
            break
  Routine hold
    PolygonComponent polygon
      fillColor = $[0.004,-1.000,1.000]
      lineColor = $None
      startVal [time (s)] = 0.0
      size = (1.3, 1.3)
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    TextComponent hold_txt
      color = $[1.000,1.000,1.000]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        The experiment will

           resume shortly
    TextComponent space_txt
      color = $[1.000,1.000,1.000]
      text = [Space]
      pos = (0.5, -0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    KeyboardComponent hold_space
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine prep_posttest
    TextComponent posttest_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Quiz

        Answer the following Qs
        by responding on the
        button box.
    TextComponent posttest_space
      text = [space to cont]
      pos = (.5, -.6)
      startVal [time (s)] = 0.0
      letterHeight = .05
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    KeyboardComponent posttest_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent change_testState
      Begin Experiment:
        posttest_score = 0;
      End Experiment:
        print('posttest: ' + str(posttest_score))
  Routine save_scores
    CodeComponent code_3
      End Experiment:
        print('pretest: ' + str(pretest_score))
        print('posttest: ' + str(posttest_score))

        loop_scores.addData('pretest', pretest_score)
        loop_scores.addData('posttest', posttest_score)
  Routine show_quiz_img
    ImageComponent quiz_img
      startVal [time (s)] = 0.0
      image [set every repeat] = $q_path
      size = (1.3, 1.3)
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    KeyboardComponent quiz_response_keys
      correctAns = $ans
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1', '2', '3', '4'
      startVal [time (s)] = 0.0
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    CodeComponent score_ans
      End Routine:
        if quiz_response_keys.keys == str(ans):
            posttest_score = posttest_score+1;
  Routine isi
    TextComponent isi_text
      text = +
      stopVal [duration (s)] = 6
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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    CodeComponent skip_isi_noscanner
      Each Frame:
        if not in_scanner:
            break
  Routine fieldmap_scan
    TextComponent fieldmap_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Running fieldmap
         (you can rest and close
          your eyes)
    TextComponent fieldmap_space
      text = [space]
      pos = (0.5, -0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent fieldmap_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine button_test
    CodeComponent code_fix_required_key
      Begin Experiment:
        required_button = 0
      Begin Routine:
        required_button += 1
      Each Frame:
        if key_test.keys in [str(required_button)]:
            break # stop if correct
    TextComponent button_test_txt
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Button test

        Please press button number
    TextComponent button_id_txt
      color = $[1.000,1.000,1.000]
      pos = (0.45, -0.11)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $required_button
    KeyboardComponent key_test
      forceEndRoutine = False
      allowedKeys = '1','2','3','4'
      startVal [time (s)] = 0.0
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  Routine is_in_scanner
    CodeComponent set_in_scanner_const
      Begin Experiment:
        const_ff_factor = 1
      End Routine:
        if scanner_y_n.keys in ['y']:
            in_scanner = True
            const_ff_factor = 1 # normal speed
            const_stim_dur = 0 # full length
        elif scanner_y_n.keys in ['n']:
            in_scanner = False
            const_ff_factor = 0.1 # ff x10 speed
            const_stim_dur = 4 # show 4 secs
        else:
            core.exit()
    TextComponent ask_if_scanner
      color = $[-1.000,1.000,-1.000]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Experiment started!

        Scanner run? [y/n]
    KeyboardComponent scanner_y_n
      forceEndRoutine = True
      allowedKeys = 'y','n'
      startVal [time (s)] = 0.0
      store = first key
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Flow
  Routine is_in_scanner
  Routine hold
  LoopInitiator loop_buttons loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 4
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    Routine rtn_button_prep
    Routine button_test
  LoopTerminator loop_buttons
  Routine hold
  Routine prep_soundcheck_2
  LoopInitiator loop_soundcheck loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine rtn_wait_for_trigger
    Routine sound_test
    Routine check_vol
  LoopTerminator loop_soundcheck
  Routine hold
  Routine prep_anat_scan
  Routine play_anat_mov
  Routine hold
  Routine prep_video
  Routine rtn_wait_for_trigger
  Routine play_fmri_review
  Routine hold
  LoopInitiator loop_postFmriReview_qs loopType="TrialHandler"
    conditionsFile = recipes/recipe_postvid_qs.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'q_path': u'/Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/questions/postvid/postvid_qs.001.jpeg'},
      {'q_path': u'/Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/questions/postvid/postvid_qs.002.jpeg'},
      {'q_path': u'/Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/questions/postvid/postvid_qs.003.jpeg'}]
    Routine post_vid_qs
  LoopTerminator loop_postFmriReview_qs
  Routine hold
  Routine prep_posttest
  Routine rtn_wait_for_trigger
  LoopInitiator loop_posttest loopType="TrialHandler"
    conditionsFile = recipes/recipe_fmri_qs.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ans': 2, 'q_path': u'/Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/questions/fmri/teach_qs.001.jpeg'},
      {'ans': 1, 'q_path': u'/Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/questions/fmri/teach_qs.002.jpeg'},
      {'ans': 4, 'q_path': u'/Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/questions/fmri/teach_qs.003.jpeg'},
      {'ans': 4, 'q_path': u'/Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/questions/fmri/teach_qs.004.jpeg'},
      {'ans': 3, 'q_path': u'/Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/questions/fmri/teach_qs.005.jpeg'},
      {'ans': 1, 'q_path': u'/Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/questions/fmri/teach_qs.006.jpeg'},
      {'ans': 4, 'q_path': u'/Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/questions/fmri/teach_qs.007.jpeg'},
      {'ans': 2, 'q_path': u'/Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/questions/fmri/teach_qs.008.jpeg'},
      {'ans': 1, 'q_path': u'/Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/questions/fmri/teach_qs.009.jpeg'},
      {'ans': 2, 'q_path': u'/Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/questions/fmri/teach_qs.010.jpeg'},
      {'ans': 1, 'q_path': u'/Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/questions/fmri/teach_qs.011.jpeg'},
      {'ans': 4, 'q_path': u'/Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/questions/fmri/teach_qs.012.jpeg'},
      {'ans': 2, 'q_path': u'/Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/questions/fmri/teach_qs.013.jpeg'}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
    Routine show_quiz_img
    Routine isi
    Routine wait_trigger_nodisp
  LoopTerminator loop_posttest
  Routine hold
  Routine prep_video
  Routine rtn_wait_for_trigger
  Routine play_neuralnet
  Routine hold
  LoopInitiator loop_postNeuralNet_qs loopType="TrialHandler"
    conditionsFile = recipes/recipe_postvid_qs.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'q_path': u'/Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/questions/postvid/postvid_qs.001.jpeg'},
      {'q_path': u'/Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/questions/postvid/postvid_qs.002.jpeg'},
      {'q_path': u'/Users/Mai/Projects/b2b_teaching/student_run_exp/stimuli/questions/postvid/postvid_qs.003.jpeg'}]
    Routine post_vid_qs
  LoopTerminator loop_postNeuralNet_qs
  Routine hold
  Routine fieldmap_scan
  Routine hold
